PsychoPy2experiment version="2023.1.3"
Settings
  Audio latency priority = 0
  Audio lib = pygame
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.2.4
  Window size (pixels) = [1280, 720]
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine Routine_1
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent line
      fillColor = white
      ori = 90
      pos = (-50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent line_2
      fillColor = white
      ori = 90
      pos = (50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent probe
      fillColor = white
      ori = 45
      pos [set every repeat] = (position, 60)
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.7
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'left', 'right'
      correctAns = corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.7
      storeCorrect = True
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  Routine Routine_2
    PolygonComponent fixation_2
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent line_3
      fillColor = white
      ori = 90
      pos = (-200, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent line_4
      fillColor = white
      ori = 90
      pos = (-100, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent line_5
      fillColor = white
      ori = 90
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent line_6
      fillColor = white
      ori = 90
      pos = (100, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent line_7
      fillColor = white
      ori = 90
      pos = (200, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent probe_2
      fillColor = white
      ori = 45
      pos [set every repeat] = (position, 60)
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.7
      units = pix
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    KeyboardComponent resp2_key
      allowedKeys = '1', '2', '3', '4', '5'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.7
      storeCorrect = True
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  Routine beep
    SoundComponent sound_1
      sound [set every repeat] = $frequency
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.3
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  Routine beep_2
    SoundComponent beep2_
      sound [set every repeat] = $frequency
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.3
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  Routine Instructions
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press LEFT ARROW for 'X' on the left bar.

        Press RIGHT ARROW for 'X' on the right bar.

        As you press the key, there will be either a loud beep or soft beep.
        Report the number of LOUD BEEPS at the end of the routine.

        When you are ready to begin, press the SPACEBAR.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_2
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ready for Round- 2?

        If X appears on the first bar, press 1
        If X appears on the second bar, press 2
        If X appears on the third bar, press 3
        and so on.. (till 5)

        To start the TRIAL ROUTINE, press the SPACEBAR
    KeyboardComponent trial_keyres
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thanks
    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank You
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  Routine trial_routine
    PolygonComponent fixation_trial
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent line1_trial
      fillColor = white
      ori = 90
      pos = (-200, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent line2_trial
      fillColor = white
      ori = 90
      pos = (-100, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent line3_trial
      fillColor = white
      ori = 90
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent line4_trial
      fillColor = white
      ori = 90
      pos = (100, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent line5_trial
      fillColor = white
      ori = 90
      pos = (200, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent probe_trial
      fillColor = white
      ori = 45
      pos [set every repeat] = (position, 60)
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.7
      units = pix
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    KeyboardComponent resp_trial
      allowedKeys = '1', '2', '3', '4', '5'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.7
      storeCorrect = True
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  Routine Instructions_3
    TextComponent ins
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Don't forget to count the number of loud beeps!

        Press the SPACEBAR when you're ready, for one final time!
    KeyboardComponent final_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine LOUD_BEEP_1
  Routine LOUD_BEEP
  Routine LOUD_BEEP_2
  Routine loud_1
    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Report the number of loud beeps in the first trial:
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Submit
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  Routine loud_2
    TextComponent text_4
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Report the number of loud beeps in the first trial:
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    TextboxComponent finalresp
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent submit
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Submit
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = CORRECT RESPONSE.xlsx
    loopType = fullRandom
    nReps = 10
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    conditions:
      [{'frequency': 200, 'position': -50, 'corr_resp': 'left'},
      {'frequency': 1500, 'position': 50, 'corr_resp': 'right'},
      {'frequency': 200, 'position': 50, 'corr_resp': 'right'},
      {'frequency': 1500, 'position': -50, 'corr_resp': 'left'}]
    Routine Routine_1
    Routine beep
  LoopTerminator trials
  Routine loud_1
  Routine Instructions_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = TRIAL ROUTINE.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'position': -200, 'corr_resp': 1},
      {'position': -100, 'corr_resp': 2},
      {'position': 0, 'corr_resp': 3},
      {'position': 100, 'corr_resp': 4},
      {'position': 200, 'corr_resp': 5}]
    Routine trial_routine
  LoopTerminator trials_3
  Routine Instructions_3
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = ROUTINE_2.xlsx
    loopType = random
    nReps = 4
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    conditions:
      [{'frequency': 200, 'position': -200, 'corr_resp': 1},
      {'frequency': 200, 'position': -100, 'corr_resp': 2},
      {'frequency': 200, 'position': 0, 'corr_resp': 3},
      {'frequency': 200, 'position': 100, 'corr_resp': 4},
      {'frequency': 200, 'position': 200, 'corr_resp': 5},
      {'frequency': 1500, 'position': -200, 'corr_resp': 1},
      {'frequency': 1500, 'position': -100, 'corr_resp': 2},
      {'frequency': 1500, 'position': 0, 'corr_resp': 3},
      {'frequency': 1500, 'position': 100, 'corr_resp': 4},
      {'frequency': 1500, 'position': 200, 'corr_resp': 5}]
    Routine Routine_2
    Routine beep_2
  LoopTerminator trials_2
  Routine loud_2
  Routine Thanks
